PsychoPy2experiment version="2024.1.5"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data filename = 'output/' + initInfo['seed'] + '/' + 'run' + initInfo['runNum']
  Experiment info = {'participant': 'FTB001', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Save wide csv file = False
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = footballBrains
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine scannerWait
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    KeyboardComponent key_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for scanner
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  Routine done
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You're done!
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  Routine fixation
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    PolygonComponent fix_2
      durationEstim = 15
      fillColor = white
      shape = cross
      size = (0.02, 0.02)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = fixTime
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        print("Trial:", trialNum, "Video:", movieFile)
        fixationStartTime = globalClock.getTime(format='float')
        #print("Fixation started:", fixationStartTime)
      End Routine:
        fixationStopTime = globalClock.getTime(format='float')
        #print("Fixation ended:", fixationStopTime)
        fixationTotalTime = fixationStopTime - fixationStartTime
        print("Fixation lasted:", fixationTotalTime)
  Routine football
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    SoundComponent audio_2
      deviceLabel = D10
      durationEstim = 15
      sound [set every repeat] = $audioFile
      speakerIndex = 2.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = movieTime
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    MovieComponent movie_2
      No audio = True
      backend = ffpyplayer
      durationEstim = 15
      forceEndRoutine = True
      movie [set every repeat] = $movieFile
      size = [None,0.5]
      startVal [time (s)] = 0
      stopVal [duration (s)] = movieTime
      stopWithRoutine = False
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        footballStartTime = globalClock.getTime(format='float')
        #print("Video started:", footballStartTime)

        # Prepare a safe RT variable for this trial
        key_rt = None
      End Routine:
        footballStopTime = globalClock.getTime(format='float')
        #print("Video ended:", footballStopTime)
        footballTotalTime = footballStopTime - footballStartTime
        print("Video lasted:", footballTotalTime)


        ###################################
        rt_raw = buttonPress.rt

        # Convert to a clean numeric or None value
        if rt_raw is None:
            key_rt = None
        elif isinstance(rt_raw, (list, tuple)):
            if len(rt_raw) == 0:
                key_rt = None
            else:
                key_rt = round(float(rt_raw[0]), 3)
        else:
            key_rt = round(float(rt_raw), 3)

        # Add to the data file
        thisExp.addData("buttonPress.rt_raw", key_rt)
        thisExp.addData("buttonPress.keys", buttonPress.keys)
    KeyboardComponent buttonPress
      allowedKeys = '6'
      durationEstim = 15
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine init
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    CodeComponent initCode
      Code Type = Py
      Before Experiment:
        initInfo = {
            "runNum": ["1", "2", "3", "4"],
            "seed": "2608191524"
        }

        dlg = gui.DlgFromDict(
            dictionary=initInfo,
            title="Select Run and Seed"
        )

        if not dlg.OK:
            core.quit()

        runNum = initInfo["runNum"]
        seed = initInfo["seed"]

        if isinstance(runNum, (list, tuple)):
            runNum = runNum[0]

        if isinstance(seed, (list, tuple)):
            seed = seed[0]

        runNum = str(runNum)
        seed = str(seed)

        conditionsFile = os.path.join(
            f"output/{seed}",
            f"trialSequence{seed}.csv"
        )

        print("Selected run:", runNum)
        print("Selected seed:", seed)
        print("Conditions file:", conditionsFile)
      Begin Routine:
        if runNum == "1":
            useRows = "0:10"
        elif runNum == "2":
            useRows = "10:20"
        elif runNum == "3":
            useRows = "20:30"
        elif runNum == "4":
            useRows = "30:40"
  Routine feedback
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    CodeComponent rt_fb_code
      Code Type = Py
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      Begin Routine:
        # Feedback trial list (global trial numbers)
        fbTrials = [2, 3, 6, 13, 14, 18, 22, 26, 29, 31, 33, 35]

        if trialNum in fbTrials:
            fbDuration = 2
        else:
            fbDuration = 0

        # ----- Safely extract reaction time -----

        rt_raw = buttonPress.rt

        # PsychoPy may store no response as None, "", [], or ()
        no_key_pressed = (
            rt_raw is None
            or rt_raw == ""
            or rt_raw == []
            or rt_raw == ()
        )

        if no_key_pressed:
            fb_text = "Too slow!\nNo response registered"
            textColour = "red"

        else:
            # If the Keyboard component stores all keys, rt is a list.
            # Take the first response.
            if isinstance(rt_raw, (list, tuple)):
                if len(rt_raw) == 0:
                    fb_text = "Too slow!\nNo response registered"
                    textColour = "red"
                else:
                    key_rt = round(float(rt_raw[0]), 3)
                    rt_difference = round(key_rt - goalTime, 3)

                    if rt_difference < 0.5:
                        fb_text = (
                            f"Good job!\n"
                            f"Difference from goal: {rt_difference:+.3f} seconds"
                        )
                        textColour = "lawngreen"

                    else:
                        fb_text = (
                            f"Too slow!\n"
                            f"Difference from goal: {rt_difference:+.3f} seconds"
                        )
                        textColour = "red"

            else:
                # Single numeric RT
                key_rt = round(float(rt_raw), 3)
                rt_difference = round(key_rt - goalTime, 3)

                if rt_difference < 0.5:
                    fb_text = (
                        f"Good job!\n"
                        f"Difference from goal: {rt_difference:+.3f} seconds"
                    )
                    textColour = "lawngreen"

                else:
                    fb_text = (
                        f"Too slow!\n"
                        f"Difference from goal: {rt_difference:+.3f} seconds"
                    )
                    textColour = "red"
    TextComponent rt_fb
      color [set every repeat] = $textColour
      durationEstim = 2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fbDuration
      text [set every repeat] = $fb_text
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  Routine instructions_2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please carefully attend to these videos of football goals while keeping your head as still as possible. With your index finger, press the button box as soon as you see a goal scored.

        (Press space to continue.)
  Routine fixation_wait
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    PolygonComponent fix
      fillColor = white
      shape = cross
      size = (0.02, 0.02)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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  Routine audioCheck
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    TextComponent instructions_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is this audio at a volume you can comfortably hear over the scanner noise?

        (Press space to continue.)
    SoundComponent volume_check
      deviceLabel = D10
      sound [set every repeat] = audio/test/aguero.wav
      startVal [time (s)] = 5
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine audioCheck
  Routine instructions_2
  Routine scannerWait
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $useRows
    conditionsFile = $conditionsFile
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialNum', 1), ('movieFile', '../Videos/Pavard.mp4'), ('audioFile', '../Audio/Pavard.wav'), ('movieTime', 25), ('fixTime', 15)]),
      OrderedDict([('trialNum', 2), ('movieFile', '../Videos/Nacho.mp4'), ('audioFile', '../Audio/Nacho.wav'), ('movieTime', 23), ('fixTime', 15)]),
      OrderedDict([('trialNum', 3), ('movieFile', '../Videos/Modric.mp4'), ('audioFile', '../Audio/Modric.wav'), ('movieTime', 16), ('fixTime', 14)]),
      OrderedDict([('trialNum', 4), ('movieFile', '../Videos/Iniesta.mp4'), ('audioFile', '../Audio/Iniesta.wav'), ('movieTime', 25), ('fixTime', 18)]),
      OrderedDict([('trialNum', 5), ('movieFile', '../Videos/Tshabalala.mp4'), ('audioFile', '../Audio/Tshabalala.wav'), ('movieTime', 24), ('fixTime', 12)]),
      OrderedDict([('trialNum', 6), ('movieFile', '../Videos/Weghorst.mp4'), ('audioFile', '../Audio/Weghorst.wav'), ('movieTime', 23), ('fixTime', 12)]),
      OrderedDict([('trialNum', 7), ('movieFile', '../Videos/Suarez.mp4'), ('audioFile', '../Audio/Suarez.wav'), ('movieTime', 18), ('fixTime', 15)]),
      OrderedDict([('trialNum', 8), ('movieFile', '../Videos/Fischer.mp4'), ('audioFile', '../Audio/Fischer.wav'), ('movieTime', 16), ('fixTime', 15)]),
      OrderedDict([('trialNum', 9), ('movieFile', '../Videos/Edmilson.mp4'), ('audioFile', '../Audio/Edmilson.wav'), ('movieTime', 15), ('fixTime', 14)]),
      OrderedDict([('trialNum', 10), ('movieFile', '../Videos/Alberto.mp4'), ('audioFile', '../Audio/Alberto.wav'), ('movieTime', 25), ('fixTime', 13)])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
    Routine fixation
    Routine football
    Routine feedback
  LoopTerminator trials
  Routine fixation_wait
  Routine done
